PsychoPy2experiment version="2020.2.4"
Settings
  Experiment info = {'participant': '', 'gender': "['1: male', '0: female']", 'age': '', 'session': '001', 'Alipay(支付宝账户)': ''}
  Force stereo = False
  Full-screen window = True
  Monitor = testMonitor
  Screen = 1
  Units = norm
  Window size (pixels) = [1440, 900]
  expName = eff-alt-01-day2
  logging level = debug
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Routines
  Routine feedback
    CodeComponent code
      Code Type = Auto->JS
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      Begin Experiment:
        feedback = '恭喜!您成功帮助了对方玩家'
      Begin Routine:
        print('FB start')
      Each Frame:
        if nPumps > 10:
            if random()<0.8:
                feedback = '恭喜!您成功帮助了对方玩家'
                thisExp.addData('feedbackType', 'good')
            else:
                feedback = '对不起，您未帮助到对方玩家'
                thisExp.addData('feedbackType', 'bad')
        else:
            feedback = '对不起，您未帮助到对方玩家'
            thisExp.addData('feedbackType', 'bad')
    TextComponent feedbackMsg
      color = $[1.000,1.000,1.000]
      letterHeight = 0.1
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 2
      text [set every repeat] = $feedback
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  Routine instructions
    CodeComponent code_JS
      Code Type = Auto->JS
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    TextComponent instrMessage
      color = $[1.000,1.000,1.000]
      font = simkai
      letterHeight = 0.06
      startVal [time (s)] = 0.0
      text = 您好，欢迎参加实验！ 实验共有两轮，你会与1名其他参与者共同完成实验。 每轮实验您将会被分配到一种角色：1）助人者；2）求助者。  请按空格键[space]继续
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    KeyboardComponent resp
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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    CodeComponent code_2
      Code Type = Both
      Begin Experiment:
        name_list = ['liqiyu', 'xiaomingcheng', 'quanyuwen']
        nameShow = name_list[int(random()*len(name_list))]
      Begin JS Experiment:
        name_list = ["liqiyu", "xiaomingcheng", "quanyuwen"];
        nameShow = name_list[Number.parseInt((random() * name_list.length))];
  Routine EffortTask
    KeyboardComponent skey_resp
      allowedKeys = 'space',
      forceEndRoutine = False
      startVal [time (s)] = 1
      stopVal [duration (s)] = 3
      store = all keys
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    CodeComponent setBalloonSize
      Code Type = Auto->JS
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      Begin Experiment:
        balloonSize=0.08
        balloonMsgHeight=0.01
      Begin Routine:
        balloonSize=0.08
        popped=False
        nPumps=0
      Each Frame:
        balloonSize=0.1+nPumps*0.015
      End Routine:
        #save data
        trials.addData('nPumps', nPumps)
        #trials.addData('size', balloonSize)
        #trials.addData('popped', popped)
    ImageComponent balloonBody
      image = redBalloon.png
      pos [set every frame] = [-1+balloonSize/2, 0]
      size [set every frame] = balloonSize
      startVal [time (s)] = 1.0
      stopVal [duration (s)] = 3
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    TextComponent reminderMsg
      color = $[1.000,1.000,1.000]
      letterHeight = 0.05
      pos = [0, -0.8]
      startVal [time (s)] = 1.0
      stopVal [duration (s)] = 3
      text = 请按空格键 [space]将气球充气
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    TextComponent balloonValMsg
      color = $[1.000,1.000,1.000]
      letterHeight = 0.06
      pos = [0,0.05]
      startVal [time (s)] = 1.0
      stopVal [duration (s)] = 3
      text = 为了帮助他人减少损失： 请您在3s内尽可能的将气球充气打！ 任务失败则没有办法帮助他人
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    CodeComponent checkKeys
      Code Type = Auto->JS
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      Begin Routine:
        print('start')
      Each Frame:
        if skey_resp.keys:
          nPumps = len(skey_resp.keys)

        print(nPumps)
        #  if nPumps>maxPumps:
        #    popped=True
        #    continueRoutine=False
  Routine fixation
    CodeComponent code_fixation
      Code Type = Auto->JS
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      Begin Routine:
        if pay_type < 1:
            fixationPic = 'nonself_pay.png'
        else:
            fixationPic = 'self_pay.png'
    ImageComponent tiral_cue
      image [set every repeat] = $fixationPic
      size = (0.5, 0.6)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 1.0
      texture resolution = 512
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  Routine effort_evaluation
    TextComponent instr_evaluation
      color = $[1.000,1.000,1.000]
      letterHeight = 0.08
      pos = (0, 0.4)
      startVal [time (s)] = 0.0
      text = 请您评价自己在气球任务中的努力程度 请点击‘Q'键表示“确定”
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    SliderComponent effort
      forceEndRoutine = False
      granularity = 0
      labels = '0%', '100%'
      pos = (0, -0.3)
      size = (1.0, 0.1)
      startVal [time (s)] = 0.0
      styles = ('rating',)
      ticks = 0, 1
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    CodeComponent code_4
      Code Type = Auto->JS
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      Each Frame:
        if not effort.getRating():
            show_num = ''
        else:
            show_num = str(round(effort.getRating()*100, 2)) + '%'
      End Routine:
        effort_eva = slider.getRating()
        thisExp.addData('effort_eva', effort_eva)
    TextComponent effort_evaluation_show
      color = $[1.000,1.000,1.000]
      letterHeight = 0.1
      startVal [time (s)] = 0.0
      text [set every frame] = $show_num
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    KeyboardComponent ok_1
      allowedKeys = 'q',
      forceEndRoutine = True
      startVal [time (s)] = 0.0
      syncScreenRefresh = False
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  Routine loss_level
    CodeComponent code_3
      Code Type = Auto->JS
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      Begin Routine:
        nameShow_loss = nameShow + "的损失水平为"

        pos1 = 0
        pos2 = 0
        pos3 = 0
        if opac_1<0.1:
            pos1 =[5, 5]
        else:
            pos1 = (0, -0.2)

        if opac_2<0.1:
            pos2 =[5, 5]
        else:
            pos2 = (0, 0)

        if opac_3<0.1:
            pos3 =[5, 5]
        else:
            pos3 = (0, 0.2)

        print(pos1, pos2, pos3)
    TextComponent name
      color = $[1.000,1.000,1.000]
      letterHeight = 0.1
      pos = (0, 0.6)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 2.0
      text [set every repeat] = $nameShow_loss
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    PolygonComponent loss_level1
      fillColor = $[1,1,1]
      opacity = 0.5
      pos [set every repeat] = [pos1[0],pos1[1]]
      shape = rectangle
      size = (0.2, 0.2)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 2.0
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    PolygonComponent loss_level2
      fillColor = $[-0.765,0.129,1.000]
      opacity = 0.5
      pos [set every repeat] = [pos2[0],pos2[1]]
      shape = rectangle
      size = (0.2, 0.2)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 2
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    PolygonComponent loss_level3
      fillColor = $[0.867,-0.655,-0.655]
      opacity = 0.5
      pos [set every repeat] = [pos3[0],pos3[1]]
      shape = rectangle
      size = (0.2, 0.2)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 2
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  Routine waiting
    TextComponent waitText
      color = $[1.000,1.000,1.000]
      font = simsun
      letterHeight = 0.08
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 2
      text = 请您耐心等待另外一名玩家2s小游戏 您将会看到根据ta的任务表现计算的损失水平
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    TextComponent countdown_2s
      color = $[1.000,1.000,1.000]
      letterHeight = 0.1
      pos = (0, -0.3)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 1.0
      text = 请等待 2s
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    TextComponent countdown_1s
      color = $[1.000,1.000,1.000]
      letterHeight = 0.1
      pos = (0, -0.3)
      startVal [time (s)] = 1.0
      stopVal [duration (s)] = 1.0
      text = 请等待 1s
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    TextComponent waitForOutcome
      letterHeight = 0.1
      startVal [time (s)] = 2.0
      stopVal [duration (s)] = 1.0
      text = 请等待结果计算…
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  Routine final
    TextComponent final_bank
      color = $[1.000,1.000,1.000]
      letterHeight = 0.08
      startVal [time (s)] = 0.0
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      text:
        您的账户已存入18元 在您实验后1-2天内，主试会将您的被试费打入您的账户。
        结束时，请勿立即退出。
        数据传输需要2-3min，请务必向主试确认是否成功收到数据！
        请按空格键[space]退出
    KeyboardComponent doneKey
      allowedKeys = 'space',
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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  Routine rewardExplain
    TextComponent instr_reward
      color = $[1.000,1.000,1.000]
      letterHeight = 0.06
      pos = (0, -0.6)
      startVal [time (s)] = 0.0
      text = 您可以根据自己的意愿帮助他人减少损失 理解后，请按空格键[space]继续 
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    KeyboardComponent key_resp_2
      allowedKeys = 'space',
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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    ImageComponent reward_explain
      image = reward_explain.png
      size = (1, 1)
      startVal [time (s)] = 0.0
      texture resolution = 512
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  Routine roleAssign
    TextComponent instr_role
      color = $[1.000,1.000,1.000]
      letterHeight = 0.06
      pos = (0, -0.6)
      startVal [time (s)] = 0.0
      text = 理解后，请按空格键[space]继续 
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    KeyboardComponent key_resp_1
      allowedKeys = 'space',
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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    ImageComponent role_assign
      image = instru_role.png
      size = (1, 1)
      startVal [time (s)] = 0.0
      texture resolution = 512
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  Routine emotion_evaluation
    TextComponent instr_emotionEvaluation
      letterHeight = 0.1
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 1.0
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      text:
        请您评估自己此刻的心情？
        确认请按键‘q’
    SliderComponent emotion
      forceEndRoutine = True
      granularity = 0
      labels = ‘0%’，‘100%’
      pos = (0, -0.3)
      size = (1.0, 0.1)
      startVal [time (s)] = 0.0
      styles = ('rating',)
      ticks = 0, 1
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    TextComponent emotion_evaluation_show
      letterHeight = 0.1
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 1.0
      text = $show_emotion_evaluation
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    CodeComponent code_5
      Code Type = Auto->JS
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      Begin Routine:
        if not emotion.getRating():
            show_emotion_evaluation = ''
        else:
            show_emotion_evaluation = str(round(emotion.getRating()*100, 2)) + '%'
    KeyboardComponent ok_2
      allowedKeys = 'q',
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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Flow
  Routine instructions
  Routine roleAssign
  Routine rewardExplain
  LoopInitiator trials loopType="TrialHandler"
    conditionsFile = trialTypes_effort.xlsx
    loopType = random
    nReps = 1
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    conditions:
      [OrderedDict([('lossLevel', 'high'), ('opac_1', 0.5), ('opac_2', 0.5), ('opac_3', 0.5), ('pay_type', 1)]),
      OrderedDict([('lossLevel', 'high'), ('opac_1', 0.5), ('opac_2', 0.5), ('opac_3', 0.5), ('pay_type', 1)]),
      OrderedDict([('lossLevel', 'high'), ('opac_1', 0.5), ('opac_2', 0.5), ('opac_3', 0.5), ('pay_type', 1)]),
      OrderedDict([('lossLevel', 'high'), ('opac_1', 0.5), ('opac_2', 0.5), ('opac_3', 0.5), ('pay_type', 1)]),
      OrderedDict([('lossLevel', 'high'), ('opac_1', 0.5), ('opac_2', 0.5), ('opac_3', 0.5), ('pay_type', 1)]),
      OrderedDict([('lossLevel', 'high'), ('opac_1', 0.5), ('opac_2', 0.5), ('opac_3', 0.5), ('pay_type', 1)]),
      OrderedDict([('lossLevel', 'high'), ('opac_1', 0.5), ('opac_2', 0.5), ('opac_3', 0.5), ('pay_type', 1)]),
      OrderedDict([('lossLevel', 'high'), ('opac_1', 0.5), ('opac_2', 0.5), ('opac_3', 0.5), ('pay_type', 1)]),
      OrderedDict([('lossLevel', 'high'), ('opac_1', 0.5), ('opac_2', 0.5), ('opac_3', 0.5), ('pay_type', 1)]),
      OrderedDict([('lossLevel', 'high'), ('opac_1', 0.5), ('opac_2', 0.5), ('opac_3', 0.5), ('pay_type', 1)]),
      OrderedDict([('lossLevel', 'low'), ('opac_1', 0.5), ('opac_2', 0.0), ('opac_3', 0.0), ('pay_type', 1)]),
      OrderedDict([('lossLevel', 'low'), ('opac_1', 0.5), ('opac_2', 0.0), ('opac_3', 0.0), ('pay_type', 1)]),
      OrderedDict([('lossLevel', 'low'), ('opac_1', 0.5), ('opac_2', 0.0), ('opac_3', 0.0), ('pay_type', 1)]),
      OrderedDict([('lossLevel', 'low'), ('opac_1', 0.5), ('opac_2', 0.0), ('opac_3', 0.0), ('pay_type', 1)])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
    Routine fixation
    Routine waiting
    Routine loss_level
    Routine EffortTask
    Routine effort_evaluation
    Routine emotion_evaluation
    Routine feedback
  LoopTerminator trials
  Routine final
